PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = GoNoGo
  keyboardBackend = ioHub
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Routines
  Routine rest
    ImageComponent plus_image
      image = images/172525_plus_icon.png
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        timing_temp.reset()
      Each Frame:
        if timing_temp.getTime() >= 1:
            continueRoutine = False

        if overall_timing.getTime() >= 300:
            continueRoutine = False
            trials_main.finished = True
  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        timing_temp.reset()

        if accurancy == 1:
            feedback_text = 'درست'
            feedback_text_component.color = 'green'
        elif accurancy == 0:
            feedback_text = 'نادرست'
            feedback_text_component.color = 'red'
      Each Frame:
        if timing_temp.getTime() >= 1:
            continueRoutine = False
    TextComponent feedback_text_component
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine trial_main
    ImageComponent image_2
      image [set every repeat] = $cue_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_main
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent stop_voice_audio_2
      sound [set every repeat] = beep.wav
      startVal [condition] = $stop_voice_flag == 1
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    CodeComponent code_main_trial
      Code Type = Py
      Begin Routine:
        #I want to create a timer for end routine
        # after 2s if user didn't pressed any button

        timing_temp.reset()
      Each Frame:
        if timing_temp.getTime() >= 2:
            continueRoutine = False

        if overall_timing.getTime() >= 300:
            continueRoutine = False
            trials_main.finished = True
      End Routine:
        corr_resp_temp = None

        if corr_resp != 'None':
            corr_resp_temp = corr_resp

        if corr_resp_temp == key_resp_main.keys:
            accurancy = 1
            thisExp.addData('Accuracy', 1)
        else:
            accurancy = 0
            thisExp.addData('Accuracy', 0)
  Routine trial_training
    CodeComponent code_training_trial2
      Code Type = Py
      Begin Routine:
        image_text_farsi = 'تست'
        if image_text == 'right':
            image_text_farsi = 'راست'
        elif image_text == 'left':
            image_text_farsi = 'چپ'
        elif image_text == 'No':
            image_text_farsi = 'هیچ'
    ImageComponent image
      image [set every repeat] = $cue_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent text
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $image_text_farsi
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    KeyboardComponent key_resp_training
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent stop_voice_audio
      sound [set every repeat] = beep.wav
      startVal [condition] = $stop_voice_flag == 1
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    CodeComponent code_training_trial
      Code Type = Py
      Begin Experiment:
        timing_temp = core.Clock()
        #overall experiment timer
        overall_timing = core.Clock()
      Begin Routine:
        #I want to create a timer for end routine
        # after 2s if user didn't pressed any button

        timing_temp.reset()
      Each Frame:
        if timing_temp.getTime() >= 2:
            continueRoutine = False

        if timing_temp.getTime() >= 300:
            continueRoutine = False
            trials_main.finished = True
      End Routine:
        corr_resp_temp = None

        if corr_resp != 'None':
            corr_resp_temp = corr_resp

        if corr_resp_temp == key_resp_training.keys:
            accurancy = 1
            thisExp.addData('Accuracy', 1)
        else:
            accurancy = 0
            thisExp.addData('Accuracy', 0)
  Routine Introduction
    ImageComponent image_introduction
      image = images/introduction_text_image.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_intro
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent text_2
      color = black
      languageStyle = Arabic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        ممنون از توجه شما

        برای خروج کلید "راست" یا "چپ" را فشار دهید
    KeyboardComponent key_resp_bye
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials_training loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 0), ('corr_resp', 'right')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 0), ('corr_resp', 'left')]),
      OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 1), ('corr_resp', 'None')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 1), ('corr_resp', 'None')]),
      OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 0), ('corr_resp', 'right')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 0), ('corr_resp', 'left')]),
      OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 0), ('corr_resp', 'right')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 0), ('corr_resp', 'left')])]
    Routine trial_training
    Routine feedback
    Routine rest
  LoopTerminator trials_training
  LoopInitiator trials_main loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = fullRandom
    nReps = 2000
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    conditions:
      [OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 0), ('corr_resp', 'right')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 0), ('corr_resp', 'left')]),
      OrderedDict([('cue_image', 'images/circle'), ('image_text', 'No'), ('stop_voice_flag', 1), ('corr_resp', 'None')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'No'), ('stop_voice_flag', 1), ('corr_resp', 'None')]),
      OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 0), ('corr_resp', 'right')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 0), ('corr_resp', 'left')]),
      OrderedDict([('cue_image', 'images/circle'), ('image_text', 'right'), ('stop_voice_flag', 0), ('corr_resp', 'right')]),
      OrderedDict([('cue_image', 'images/square'), ('image_text', 'left'), ('stop_voice_flag', 0), ('corr_resp', 'left')])]
    Routine trial_main
    Routine rest
  LoopTerminator trials_main
  Routine goodbye
