PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = white
  expName = abm
  keyboardBackend = ioHub
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Routines
  Routine Instruction
    TextComponent instruct_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        سلام به تسک گوش به زنگی خوش آمدید
        به محض این که شمارشگر را وسط صفحه دیدید
        کلید فاصله را فشار دهید
        طول تسک : 5 دقیقه
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # All the durations are in seconds
        # Random ISI between 1 and 4.
        minISI = 1
        maxISI = 4

        # Task duration
        length_of_task = 300

        # Feedback duration
        feed = 0.5

        # A timer
        timing = core.Clock()

        # Loading the beep sound
        warning_beep = sound.Sound('beep.wav')
      Begin Routine:
        # ISI is then set each routine
        randISI = random() * (maxISI - minISI) + minISI

        # If it is the first trial
        if abm_trials.thisN == 0:
            overall_timer = core.Clock()
            realISI = 0

        if abm_trials.thisN > 0:
            # We count the duration of the feedback as part of the ISI
            realISI = feed

        # A message when participant miss
        message = 'You did not hit the button!'

        # Adding the ISI so it is saved in the datafile
        thisExp.addData('ISI', randISI)
      Each Frame:
        keys = dontrespond.getKeys(keyList=['space'], waitRelease=False)
        keys = [key.name for key in keys]

        # Append True to list if a key is pressed, clear list if not
        if "space" in keys:
             message = "خیلی زود!"
             continueRoutine = False
    TextComponent ISI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI - realISI
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    KeyboardComponent dontrespond
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI - 1
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  Routine Target
    KeyboardComponent up_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Target_code
      Code Type = Py
      Begin Routine:
        # Reset the timer
        timing.reset()

        # Check for response
        if message == 'خیلی زود!':
            # Adding 0 to Accuracy and missing to RTms
            thisExp.addData('Accuracy', 0)
            thisExp.addData('RTms', np.NAN)
            # End the Routine to continue next trial
            continueRoutine = False

        positions_list = [0.6,-0.6]
      Each Frame:
        time = int(round(timing.getTime(), 3) * 1000)
      End Routine:
        if type(up_key.rt) is float:
            message = str(round(up_key.rt * 1000))
            thisExp.addData('Accuracy', 1)
            thisExp.addData('RTms', up_key.rt * 1000)

        # PsychoPy is not running the trial for more than 29.991...
        if timing.getTime() >= 29.99:
                message = 'No response!'
                warning_beep.play()
                up_key.rt = timing.getTime()
                thisExp.addData('RTms', np.NAN)
                thisExp.addData('Accuracy', 0)
                continueRoutine = False
    TextComponent target_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $time
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  Routine Feedback
    TextComponent Feedback_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feed
      text [set every repeat] = $message
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  Routine End_task
    CodeComponent end_code
      Code Type = Py
      End Routine:
        # Get the time in the task
        time_in_task = overall_timer.getTime()

        # If time_in_task corresponds to the duration we set previously we end te task
        if time_in_task >= length_of_task:
            continueRoutine = False
            abm_trials.finished = True
  Routine The_end
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent goodbye_text
      color = black
      font = B Nazanin
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        پایان
        ممنون از توجه شما
        برای خروج کلید فاصله را فشار دهید
Flow
  Routine Instruction
  LoopInitiator abm_trials loopType="TrialHandler"
    loopType = random
    nReps = 120
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator abm_trials
  Routine The_end
